{
    "import": {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": -1,
        "filesPattern": -1,
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": -1,
        "sphericalAberration": -1,
        "amplitudeContrast": -1,
        "magnification": -1,
        "samplingRateMode": 0,
        "samplingRate": -1,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": -1,
        "gainFile": -1,
        "darkFile": null,
        "dataStreaming": true,
        "timeout": -1,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    "motioncor": {
        "object.className": "ProtMotionCorr",
        "object.id": "66",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": -1,
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": true,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "gainRot": -1,
        "gainFlip": -1,
        "defectFile": null,
        "defectMap": null,
        "extraParams2": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    "ctffind": {
        "object.className": "CistemProtCTFFind",
        "object.id": "128",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 3.5,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 100.0,
        "slowSearch": false,
        "fixAstig": false,
        "astigmatism": 500.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 3,
        "streamingBatchSize": 1,
        "inputMicrographs": "64.outputMicrographs"
    },
    "monitor": {
        "object.className": "ProtMonitorSummary",
        "object.id": "185",
        "object.label": "emfacilities - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "128",
            "2",
            "66"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 1000.0,
        "monitorTime": -1,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "publishCmd": -1
    }
}